OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Scenario description - 4-Class SSVEP Detection with CCA

  This scenario is an example for acquisition and real-time detection of a 4-class SSVEP using Canonical Correlation Analysis (CCA).
  Specifically, this scenario uses the Python scripting toolbox to implement CCA.
  This scenario can independently run inference on one machine/process while the SSVEP flashing stimulus are presented on another machine/process.

  Channel selector, Temporal filter and time based epoching can be modifed as per user's requirement.

  Please ensure that the OpenViBE recognizes the Python executable and you are able to enable the Python Scripting Box

  Modify the parameters in the Python Scripting box according to the hardware and SSVEP interface settings.
  The attached python script can be modified to accommodate more targets.

  Note: SSVEP Flashing stimuli are not implemented in this scenario.
  The developer is required to have access to a flashing stimuli generation program.

  Aravind Ravi, October 2018
  eBionics Lab
  University of Waterloo
  Email: aravind.ravi@uwaterloo.ca

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "O1;O2;Oz"
  Channel List = O1;O2;Oz
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 3
  Epoch intervals (in sec) = 0.5
-> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/OpenViBEProject/4ClassCCA.py
  Frequencies = 8,10,12,15
  Sampling Rate = 250
  Number Of Targets = 4
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
